PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 720]
  expName = 2fac
  keyboardBackend = ioHub
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Routines
  Routine slider_task
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    TextComponent inform_text
      letterHeight = 50
      pos = (0, 200)
      startVal [time (s)] = 0.0
      text = Choose ?
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = "0", "100"
      letterHeight = 50
      size = (720, 80)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        slider.markerPos = 3
        key_move = False
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            key_move = True
            if 'f' in keys:
                slider.markerPos = slider.markerPos - 1
        #        slider.rating = True
            elif 'j' in keys:
                slider.markerPos = slider.markerPos  + 1
        #        slider.rating = True
            slider.Response = slider.markerPos
            slider.rating = slider.markerPos
      End Routine:
        slider.Response = slider.markerPos
    KeyboardComponent slider_resp
      allowedKeys = 'f','j','space'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent confirm_text
      letterHeight = 30
      pos = (0, -200)
      startVal [condition] = key_move
      text [set every frame] = $slider.markerPos
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    KeyboardComponent confirm_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = key_move
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  Routine choice_task
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    ImageComponent Loss_image
      image = ../Stimuli/L.png
      size = (1280, 720)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent choice_resp
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        KeyResponse = False
        confirm_text = ""
        #left_text_color = "white"
        #right_text_color = "white"
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            KeyResponse = True
            if 'f' in keys:
               confirm_text= "A"
               left_text_color = "red"
               right_text_color = "white"
            elif 'j' in keys:
                confirm_text= "B"
                left_text_color = "white"
                right_text_color = "red"
        #        slider.rating = True
        #        KeyResponse = True
    TextComponent confirm_text_2fac
      letterHeight = 30
      pos = (0, -200)
      startVal [condition] = KeyResponse
      text [set every frame] = $"Fucking \n Press Space to Continue"
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    KeyboardComponent confirm_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = KeyResponse
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    PolygonComponent choosen_rect
      lineColor = red
      lineWidth = 2
      shape = rectangle
      size = (100, 100)
      startVal [condition] = KeyResponse
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    TextComponent _200
      letterHeight = 10
      pos = (200, 200)
      startVal [time (s)] = 0.0
      text = (200,200)
      units = pix
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    TextComponent _2000
      letterHeight = 10
      pos = (200, -200)
      startVal [time (s)] = 0.0
      text = (200,-200)
      units = pix
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    TextComponent _200_3
      letterHeight = 10
      pos = (-200, 200)
      startVal [time (s)] = 0.0
      text = (-200,200)
      units = pix
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    TextComponent _200_4
      letterHeight = 10
      pos = (-200, -200)
      startVal [time (s)] = 0.0
      text = (-200,-200)
      units = pix
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  Routine Fixation
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    PolygonComponent fix_stumili
      fillColor = white
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = pix
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Flow
  Routine choice_task
  Routine Fixation
